---
API: 3
OpenSesame: 4.0.1
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/emilfrej/Documents/Uni/3semester/Perception and Action/mousetracking_ethics_experiment"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background black

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run fixation_cross True
	run trial_scenario True
	run new_1_mousetrap_response True
	run proceed_to_experimet_message True

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to exit" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run warning always
	run instructions True
	run practice_loop always
	run experiment_loop True
	run end_of_experiment always

define loop experiment_loop
	set source_file "blockloop_mousetracking.csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 8
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if False
	setcycle 0 trial_type similar
	setcycle 0 correct_response left_button
	setcycle 0 left_picture "hotdogsorlegs/hotdogs_1.png"
	setcycle 0 right_picture "hotdogsorlegs/legs_1.png"
	setcycle 1 trial_type dissimilar
	setcycle 1 correct_response right_button
	setcycle 1 left_picture "hotdogsorlegs/hairy_legs_1.png"
	setcycle 1 right_picture "hotdogsorlegs/hotdogs_2.jpg"
	setcycle 2 trial_type similar
	setcycle 2 correct_response left_button
	setcycle 2 left_picture "hotdogsorlegs/hotdogs_3.jpg"
	setcycle 2 right_picture "hotdogsorlegs/legs_2.png"
	setcycle 3 trial_type dissimilar
	setcycle 3 correct_response right_button
	setcycle 3 left_picture "hotdogsorlegs/hairy_legs_2.png"
	setcycle 3 right_picture "hotdogsorlegs/hotdogs_4.png"
	setcycle 4 trial_type similar
	setcycle 4 correct_response left_button
	setcycle 4 left_picture "hotdogsorlegs/hotdogs_2.jpg"
	setcycle 4 right_picture "hotdogsorlegs/legs_1.png"
	setcycle 5 trial_type dissimilar
	setcycle 5 correct_response right_button
	setcycle 5 left_picture "hotdogsorlegs/hairy_legs_1.png"
	setcycle 5 right_picture "hotdogsorlegs/hotdogs_1.png"
	setcycle 6 trial_type similar
	setcycle 6 correct_response left_button
	setcycle 6 left_picture "hotdogsorlegs/hotdogs_4.png"
	setcycle 6 right_picture "hotdogsorlegs/legs_2.png"
	setcycle 7 trial_type dissimilar
	setcycle 7 correct_response right_button
	setcycle 7 left_picture "hotdogsorlegs/hairy_legs_2.png"
	setcycle 7 right_picture "hotdogsorlegs/hotdogs_3.jpg"
	run trial_sequence

define sketchpad fixation
	set start_response_interval no
	set duration 200
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=256 z_index=0

define sketchpad fixation_cross
	set start_response_interval no
	set duration 200
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=256 z_index=0

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="You will be presented a number of hypothetical scenarios. For each scenenario you will have two ways of responding. Please select how you would behave in the given scenario by clicking on one of the responses. There will a pause before each question for as long as you like. There is one trial round before the experiment begins. <br /><br />Press any key to continue to the trial run." x=32.0 y=0.0 z_index=0

define mousetrap_response mouse
	__warning_message__
	draw textline text="Please start moving" x=0 y=0
	__end__
	set update_feedback no
	set timeout infinite
	set start_coordinates "0;325"
	set skip_item no
	set sketchpad stimuli_1
	set save_trajectories yes
	set reset_mouse yes
	set number_of_buttons 2
	set mouse_buttons_allowed "left_button;right_button"
	set max_initiation_time 1000
	set logging_resolution 10
	set description "Tracks mouse movements"
	set correct_button "[deontological_button]"
	set click_required yes
	set check_initiation_time no
	set button4 ""
	set button3 ""
	set button2 right_button
	set button1 left_button
	set boundaries "upper=no lower=no left=no right=no"

define mousetrap_response new_1_mousetrap_response
	__warning_message__
	draw textline text="Please start moving" x=0 y=0
	__end__
	set update_feedback no
	set timeout infinite
	set start_coordinates "0;325"
	set skip_item no
	set sketchpad trial_scenario
	set save_trajectories no
	set reset_mouse yes
	set number_of_buttons 2
	set mouse_buttons_allowed "left_button;right_button"
	set max_initiation_time 1000
	set logging_resolution 10
	set description "Tracks mouse movements"
	set click_required yes
	set check_initiation_time no
	set button4 ""
	set button3 ""
	set button2 right_button
	set button1 left_button
	set boundaries "upper=no lower=no left=no right=no"

define logger new_logger
	set description "Logs experimental data"
	set auto_log no
	log xpos_mouse
	log ypos_mouse
	log timestamps_mouse
	log deontological_button
	log dilemma_name
	log left_answer
	log right_answer
	log correct_button_mouse
	log datetime
	log initiation_time
	log initiation_time_mouse

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Press any key to continue to next scenario<br />" x=0 y=0 z_index=0

define loop practice_loop
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if False
	setcycle 0 practice no
	run block_sequence

define sketchpad proceed_to_experimet_message
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="You will now proceed to the experiment<br />" x=0 y=0 z_index=0

define sketchpad stimuli
	set duration 0
	set description "Displays stimuli"
	draw rect color="#ffffff" fill=0 h=160 name=left_button penwidth=1 show_if=a w=224 x=-416 y=-288 z_index=0
	draw rect color="#ffffff" fill=0 h=160 name=right_button penwidth=1 show_if=a w=-224 x=416 y=-288 z_index=0

define sketchpad stimuli_1
	set duration 0
	set description "Displays stimuli"
	draw rect color="#999999" fill=0 h=256 name=left_button penwidth=1 show_if=always w=256 x=-416 y=-320 z_index=0
	draw rect color="#999999" fill=0 h=256 name=right_button penwidth=1 show_if=always w=-256 x=416 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="[left_answer]<br />" x=-288 y=-192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="[right_answer]" x=288 y=-192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="[instruction_text]" x=0 y=160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="What do you do?<br />" x=0 y=352 z_index=0

define sketchpad trial_pause
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Press a button when you are ready to proceed" x=0 y=0 z_index=0

define sketchpad trial_scenario
	set duration 0
	set description "Displays stimuli"
	draw rect color="#999999" fill=0 h=256 name=left_button penwidth=1 show_if=always w=256 x=-416 y=-320 z_index=0
	draw rect color="#999999" fill=0 h=256 name=right_button penwidth=1 show_if=always w=-256 x=416 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Do nothing<br />" x=-288 y=-192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Make donation<br />" x=288 y=-192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="You are at home one day when the mail arrives. You receive a letter<br />from a reputable international aid organization. The letter asks you<br />to make a donation of two hundred dollars to their organization.<br />The letter explains that a two hundred-dollar donation will allow<br />this organization to provide needed medical attention to some poor<br />people in another part of the world." x=0 y=160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="What do you do?<br />" x=0 y=320 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run new_sketchpad True
	run fixation always
	run stimuli_1 always
	run mouse always
	run new_logger True

define sketchpad warning
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Welcome! Your task is to make decisions under varying amounts of time pressure. Some of the questions describe very disturbing scenarios. Please consider if you would prefer not read such things, and inform the experimenter if that is the case. You can also abort the experiment at any time.<br /><br />Press any key if you wish to continue, otherwise inform the experimenter if not." x=0 y=0 z_index=0

